<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.CameraControllerGen2;assembly=Harp.CameraControllerGen2"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:p2="clr-namespace:Social;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:RepositoryLogController.bonsai">
        <RepositoryPath>..\..\</RepositoryPath>
        <DataPath>D:\ProjectPhields</DataPath>
        <FallbackPath>D:\Tests</FallbackPath>
        <ChunkSize>1</ChunkSize>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="WorkflowName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ExportMetadata.bonsai">
        <WorkflowName/>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEvents</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedCam0Event" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>LoggerTimestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>ClockSynchronizer</LogName>
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>VideoController</LogName>
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTop</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraTop</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraSide</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>CameraSide</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentSubjectStateMetadata)">
        <rx:Name>SubjectState</rx:Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>Environment_SubjectState</LogName>
        <Selector>Seconds,Value.Id,Value.Weight,Value.Type</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentStateMetadata)">
        <rx:Name>EnvironmentState</rx:Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>Environment_EnvironmentState</LogName>
        <Selector>Seconds,Value.Type</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MotorCommands</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
  "Command" as Type,
  it as Content
)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MotorEvents</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
  "Event" as Type,
  it as Content
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoggerTimestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>Motor</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(aeon:LogMessage)">
        <rx:Name>Annotations</rx:Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats>Heartbeats</Heartbeats>
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>Environment_MessageLog</LogName>
        <Selector>Seconds,Value.Priority,Value.Type,Value.Message</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="aeon:StateRecoverySubject" TypeArguments="p2:Environment">
          <aeon:Name>EnvironmentConfiguration</aeon:Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
          <Name>Patch1Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogJson.bonsai">
          <Heartbeats>Heartbeats</Heartbeats>
          <ClosingDuration>PT2S</ClosingDuration>
          <LogName>Environment_ActiveConfiguration</LogName>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>